opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: color test
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_single: {mount: left}
  p1000_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 4}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  dish: {definitionId: custom_beta/petriplatec/1, slot: 5}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1): {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 6}
pipetteTiprackAssignments:
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - peroxide
  - sterile water
  - mrfp1
  - seb blue
  - marleyyfp
  - cometgfp
  - ethanol
  - dsred
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    mrfp1 {volume: 1000}: A1
    seb blue {volume: 1000}: A2
    marleyyfp {volume: 1000}: B1
    cometgfp {volume: 1000}: B2
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1):
    sterile water {volume: 1000}: A3
    peroxide {volume: 1000}: A1
    ethanol {volume: 1000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: E1-G1, I1, K1-O1, E2, G2, I2, K2, M2, N2, E3, G3-I3, K3-M3, O3, E5-I5, K5, O5, I6, K6-O6, E7-I7, K7, O7, E9-I9, K9-O9, E10, G10, I10, K10, M10, O10, E11, F11, H11, I11, K11, L11, N11, O11, E13-G13, I13, K13-O13, E14, G14, I14, K14, M14, O14, E15, G15-I15, K15, M15, O15, E17-I17, E18, I18, E19, I19, G20
  dispense_flowRate: 1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: D1, J1, P1, D2, J2, P2, D3, J3, P3, D4, J4, P4, D5, J5, P5, D6, J6, P6, D7, J7, P7, D8, J8, P8, D9, J9, P9, D10, J10, P10, D11, J11, P11, D12, J12, P12, D13, J13, P13, D14, J14, P14, D15, J15, P15, D16, J16, P16, D17, J17, P17, D18, J18, P18, D19, J19, P19, D20, J20, P20
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: H1, F2, H2, L2, O2, F3, N3, E4-I4, K4-O4, L5-N5, E6-H6, L7-N7, E8-I8, K8-O8, F10, H10, L10, N10, O10, G11, M11, E12-I12, K12-O12, H13, F14, H14, L14, N14, F15, L15, N15, E16-I16, K16-O16, K17-O17, F18-H18, K18-O18, F19-H19, K19-O19, E20, F20, H20, I20, K20-O20
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: B1, C1, Q1, R1, B2, C2, Q2, R2, B3, C3, Q3, R3, B4, C4, Q4, R4, B5, C5, Q5, R5, B6, C6, Q6, R6, B7, C7, Q7, R7, B8, C8, Q8, R8, B9, C9, Q9, R9, B10, C10, Q10, R10, B11, C11, Q11, R11, B12, C12, Q12, R12, B13, C13, Q13, R13, B14, C14, Q14, R14, B15, C15, Q15, R15, B16, C16, Q16, R16, B17, C17, Q17, R17, B18, C18, Q18, R18, B19, C19, Q19, R19, B20, C20, Q20, R20
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
labwareDefinitions:
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  custom_beta/petriplatec/1:
    brand: {brand: custom, brandId: [112dda]}
    metadata: {displayName: petri plate centered, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 14}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: petriplatec}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 1, totalLiquidVolume: 10, shape: circular, diameter: 1, x: 34, y: 72, z: 13}
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commands:
- pickUpTip: {pipette: p10_single, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p10_single, volume: 2, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 2, labware: dish, well: E1, offsetFromBottomMm: 0.5, flowRate: 1}
- blowout: {pipette: p10_single, labware: dish, well: E1, flowRate: 1, offsetFromBottomMm: 1}
- aspirate: {pipette: p10_single, volume: 2, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 2, labware: dish, well: F1, offsetFromBottomMm: 0.5, flowRate: 1}
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