opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: creeper
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_single: {mount: left}
  p1000_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 4}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  dish: {definitionId: custom_beta/petriplatec/1, slot: 5}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1): {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 6}
pipetteTiprackAssignments:
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - peroxide
  - sterile water
  - mrfp1
  - seb blue
  - marleyyfp
  - cometgfp
  - ethanol
  - dsred
  - tspurple
  - 9
  - aeblue
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    mrfp1 {volume: 1000}: A1
    seb blue {volume: 1000}: A2
    marleyyfp {volume: 1000}: B1
    cometgfp {volume: 1000}: B2
    dsred {volume: 1000}: A3
    tspurple {volume: 1000}: B3
    9 {volume: 1000}: A4
    aeblue {volume: 1000}: B4
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1):
    sterile water {volume: 1000}: A3
    peroxide {volume: 1000}: A1
    ethanol {volume: 1000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: C3, E3, G3, J3, K3, N3, O3, Q3, C4, D4, F4, G4, I4, J4, L4, M4, O4, Q4, R4, D5, E5, K5, M5, N5, P5, R5, C6, E6, J6, K6, M6-R6, E7, L7, C8, D8, J8-L8, G9-I9, Q9, D10-G10, I10, Q10, R10, D11, F11, H11, I11, P11, R11, C12-H12, P12-R12, J13-L13, C14-E14, J14, L14, R14, C15-E15, L15-N15, P15-R15, C16, E16, J16-M16, O16, P16, R16, C17-E17, G17-J17, M17-O17, Q17, D18-G18, J18-M18, P18-R18
  dispense_flowRate: 1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: L3, P3, R3, E4, J7, R7, R8, D9, Q11, C13, R13, K14, Q16, L17
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: I3, M3, H4, C5, Q5, D7, E9, P9, R9, C10, G11, I12, D13, J15, N16, K17, P17, C18, H18, O18
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: D3, F3, K4, P4, O5, D6, C7, C9, F9, H10, P10, C11, E11, K15, O15, D16, F17, R17, N18
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: H3, N4, L5, L6, K7, E8, E13
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/petriplatec/1:
    brand: {brand: custom, brandId: [112dda]}
    metadata: {displayName: petri plate centered, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 14}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: petriplatec}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 1, totalLiquidVolume: 10, shape: circular, diameter: 1, x: 34, y: 72, z: 13}
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commands:
- pickUpTip: {pipette: p10_single, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: B2, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: C3, offsetFromBottomMm: 0.5, flowRate: 1}
- blowout: {pipette: p10_single, labware: dish, well: C3, flowRate: 1, offsetFromBottomMm: 1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: B2, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: E3, offsetFromBottomMm: 0.5, flowRate: 1}
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