opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: jellyfish
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_single: {mount: left}
  p1000_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 4}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  dish: {definitionId: custom_beta/petriplatec/1, slot: 5}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1): {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 6}
pipetteTiprackAssignments:
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - peroxide
  - sterile water
  - mrfp1
  - seb blue
  - marleyyfp
  - cometgfp
  - ethanol
  - dsred
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    mrfp1 {volume: 1000}: A1
    seb blue {volume: 1000}: A2
    marleyyfp {volume: 1000}: B1
    cometgfp {volume: 1000}: B2
    dsred {volume: 1000}: A3
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1):
    sterile water {volume: 1000}: A3
    peroxide {volume: 1000}: A1
    ethanol {volume: 1000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: D6-I6, C7-F7, H7-J7, B8-F8, I8, J8, B9, C9, E9, F9, I9, J9, B10, C10, F10-J10, B11, C11, F11-J11, C12, F12-J12, C13, F13, J13, C14, E14, F14, I14, J14, D15-F15, H15-J15, D16-J16, B17, E17-J17, C18, I18, J18, F19-I19
  dispense_flowRate: 1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: G7, G8, H8, D9, G9, H9, D10, E10, D11, E11, D12, E12, D13, E13, G13-I13, D14, G14, H14, G15
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: B12-B15, C15, B16, C16, C17, D17, D18-H18, D19, E19
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: D5-I5, C6, J6, B7, K7, A8, K8, A9, K9, A10, K10, A11, K11, A12, K12, A13, K13, A14, K14, A15, K15, A16, K16, A17, K17, B18, K18, C19, J19, D20-I20
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: O1, N2, O2, M3, N3, L4, M4, K5, L5, K6, N6-P6, M7-O7, L8, M8, Q8-T8, L9, P9-S9, N10-P10, N11, L12-N12, R12, L13, M13, Q13, R13, P14, Q14, O15, P15, L16-O16, L17-N17
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/petriplatec/1:
    brand: {brand: custom, brandId: [112dda]}
    metadata: {displayName: petri plate centered, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 14}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: petriplatec}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 1, totalLiquidVolume: 10, shape: circular, diameter: 1, x: 34, y: 72, z: 13}
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commands:
- pickUpTip: {pipette: p10_single, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: D6, offsetFromBottomMm: 0.5, flowRate: 1}
- blowout: {pipette: p10_single, labware: dish, well: D6, flowRate: 1, offsetFromBottomMm: 1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: E6, offsetFromBottomMm: 0.5, flowRate: 1}
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