opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: link
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_single: {mount: left}
  p1000_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 4}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  dish: {definitionId: custom_beta/petriplatec/1, slot: 5}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1): {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 6}
pipetteTiprackAssignments:
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - peroxide
  - sterile water
  - mrfp1
  - seb blue
  - marleyyfp
  - cometgfp
  - ethanol
  - dsred
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    mrfp1 {volume: 1000}: A1
    seb blue {volume: 1000}: A2
    marleyyfp {volume: 1000}: B1
    cometgfp {volume: 1000}: B2
    dsred {volume: 1000}: A3
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1):
    sterile water {volume: 1000}: A3
    peroxide {volume: 1000}: A1
    ethanol {volume: 1000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: L4-P4, K5, L5, N5-P5, K6, P6, K7, L7, N7-P7, F8-H8, K8-P8, R8, E9, F9, K9-P9, R9, E10, F10, H10, L10, Q10, R10, E11, F11, J11, M11, O11, E12, F12, J12, M12-O12, E13, F13, H13, N13, Q13, E14, F14, N14, Q14, F15-H15, N15, Q15, K16, I17-L17, K18-M18
  dispense_flowRate: 1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: Q5, E6-H6, Q6, G7-I7, Q7, I8, Q8, G9-J9, Q9, I10-K10, M10-P10, G11-I11, K11, G12-I12, K12, I13-K13, G14-J14, I15, M15, G16-I16, L16-N16, E17-H17, M17-O17, N18
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: J7, D8, E8, J8, C9, D9, C10, D10, G10, C11, D11, L11, N11, P11, C12, D12, L12, P12, C13, D13, G13, L13, M13, O13, P13, C14, D14, K14-M14, O14, P14, D15, E15, J15-L15, O15, P15, J16, O16
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: A2-T2, A3, T3, A4, T4, A5, T5, A6, T6, A7, T7, A8, T8, A9, T9, A10, T10, A11, T11, A12, T12, A13, T13, A14, T14, A15, T15, A16, T16, A17, T17, A18, T18, A19, T19, A20-T20
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/petriplatec/1:
    brand: {brand: custom, brandId: [112dda]}
    metadata: {displayName: petri plate centered, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 14}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: petriplatec}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 1, totalLiquidVolume: 10, shape: circular, diameter: 1, x: 34, y: 72, z: 13}
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commands:
- pickUpTip: {pipette: p10_single, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: L4, offsetFromBottomMm: 0.5, flowRate: 1}
- blowout: {pipette: p10_single, labware: dish, well: L4, flowRate: 1, offsetFromBottomMm: 1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: M4, offsetFromBottomMm: 0.5, flowRate: 1}
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