opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: rainbow fixed
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_single: {mount: left}
  p1000_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 4}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  dish: {definitionId: custom_beta/petriplatec/1, slot: 5}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1): {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 6}
pipetteTiprackAssignments:
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - peroxide
  - sterile water
  - mrfp1
  - seb blue
  - marleyyfp
  - cometgfp
  - ethanol
  - dsred
  - tspurple
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    mrfp1 {volume: 1000}: A1
    seb blue {volume: 1000}: A2
    marleyyfp {volume: 1000}: B1
    cometgfp {volume: 1000}: B2
    dsred {volume: 1000}: A3
    tspurple {volume: 1000}: B3
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1):
    sterile water {volume: 1000}: A3
    peroxide {volume: 1000}: A1
    ethanol {volume: 1000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: M3-P3, K4, L4, H5-J5, G6, F7, E8-E13, F14, G15, H16-J16, K17, L17, M18-P18
  dispense_flowRate: 1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: M4-P4, K5-M5, H6-K6, G7, H7, F8, G8, F9-F13, G13, G14, H14, H15-K15, K16-M16, M17-Q17
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: N5-P5, L6-N6, I7-L7, H8, I8, G9, H9, G10-G12, H12, H13, I13, I14-L14, L15-N15, N16-Q16
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: O6, P6, M7-O7, J8-M8, I9, J9, H10, I10, H11, I11, I12, J12, J13-M13, M14-O14, O15-Q15
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: P7, N8-P8, K9-N9, J10, K10, J11, K11, K12-N12, N13-P13, P14
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 10
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A2
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p10_single
  volume: 10
  times: 5
  changeTip: never
  labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap (1)
  wells: A3
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: dish
  dispense_wells: O9, P9, L10-N10, L11-N11, O12, P12
  dispense_flowRate: 1
  dispense_mmFromBottom: 0.5
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/petriplatec/1:
    brand: {brand: custom, brandId: [112dda]}
    metadata: {displayName: petri plate centered, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 14}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: petriplatec}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 1, totalLiquidVolume: 10, shape: circular, diameter: 1, x: 34, y: 72, z: 13}
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commands:
- pickUpTip: {pipette: p10_single, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: M3, offsetFromBottomMm: 0.5, flowRate: 1}
- blowout: {pipette: p10_single, labware: dish, well: M3, flowRate: 1, offsetFromBottomMm: 1}
- aspirate: {pipette: p10_single, volume: 1, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 1, labware: dish, well: N3, offsetFromBottomMm: 0.5, flowRate: 1}
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